PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = $[-0.3,-0.3,-0.3]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = BCI_Exp_v10
  Screen = 2
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Routines
  Routine feedback
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = $[-0.5, -0.5, -0.5]
      text [set every repeat] = $feedbacktext
      pos = (-10, 0)
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine baseline
    TextComponent zeitpuffer1
      color = $[-0.5, -0.5, -0.5]
      stopVal [duration (s)] = 5
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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    CodeComponent baseline_code
      Begin Experiment:
        #baseline_liste=[]
        #import numpy

        #-----------------------------------
        # Begin Experiment
        #-----------------------------------
        import numpy

        bsize_liste = [0]*1900 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz
        bsize = 0
      Begin Routine:
        bsize_liste = [0]*1900 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz


        #-----------------------------------
        # Begin Routine
        #-----------------------------------

        #---------------------
        # starting values
        state_no = 0

        lmarker = -1

        delay_size = 2

        #---------------------
        # filter preferences
        step_limit = 0.19    # 30Hz: 0.19 | 60Hz: 0.09
        lower_th = 1
      End Routine:
        #-----------------------------------
        # End Routine
        #-----------------------------------

        #logging.console.write("test\n")
        # computing baseline mean
        bsize_liste = filter(None, bsize_liste)
        baselinemean = round((sum(bsize_liste)/(len(bsize_liste))),2)
        baselinemean = baselinemean


        # computing baseline sd
        baselinesd = abs(round(numpy.std(bsize_liste),8))

        # computing percent-change: sd / mean
        prozent_change1= round((baselinesd/baselinemean),2)

        # computing aussenringradius - maximum deviation
        aussenringradius = (baselinemean+(baselinemean*prozent_change1))*35

        # computing innenringradius - minimum deviation
        innenringradius = (baselinemean-(baselinemean*prozent_change1))*35

        #--------------------------------------------------------------------------
        # savings:

        thisExp.addData('Baseline_Liste', bsize_liste)
        thisExp.addData('Baseline_Mittelwert', baselinemean)
        thisExp.addData('Baseline_Standardabweichung', baselinesd)
      Each Frame:
        res = iViewXAPI.iV_GetSample(byref(sampleData))
        bsize =(sampleData.leftEye.diam) # /32 für highspeed eyetracker, ohne /32 für RED


        #logging.console.write(str(bsize))

        #--------------------
        # state 0: starting
        #--------------------
        if state_no == 0:
         if lmarker < 1:
          lmarker = lmarker + 1
          bsize_liste[lmarker] = bsize
          state_next = 0

         else:
          if bsize > lower_th and bsize_liste[lmarker] > lower_th and bsize_liste[lmarker-1] > lower_th and (abs(bsize-bsize_liste[lmarker]) <= step_limit) and (abs(bsize_liste[lmarker]-bsize_liste[lmarker-1]) <= step_limit):
           lmarker = lmarker + 1
           bsize_liste[lmarker] = bsize
           state_next = 1
          else:
           bsize_liste[lmarker-1] = bsize_liste[lmarker]
           bsize_liste[lmarker] = bsize

           state_next = 0


        #----------------------
        # state 1: observation
        #----------------------

        if state_no == 1:

         # Filter Activation
         #- - - - - - - - - - -
         if bsize <= lower_th:
          on = 1
          jump_marker = lmarker + 1 # marks values to be replaced

                # Identification of last valid_value before the blink
                #- - - - - - - - - - - - - - - - - - - - - - - - - - - - -
          while on == 1:
           if bsize_liste[lmarker] >= lower_th and bsize_liste[lmarker-1] >= lower_th and bsize_liste[lmarker-2] >= lower_th and abs(bsize_liste[lmarker]-bsize_liste[lmarker-1]) <= step_limit and abs(bsize_liste[lmarker-1]-bsize_liste[lmarker-2]) <= step_limit:
            valid_value = bsize_liste[lmarker]
            lmarker = lmarker + 1
            for i in range(lmarker, jump_marker, 1):
             bsize_liste[i] = valid_value

            bsize_liste[jump_marker] = valid_value

            lmarker = jump_marker
            puffer_size = jump_marker + delay_size

            on = 0
            state_next = 2

           else:
            lmarker = lmarker-1

         else:
          lmarker = lmarker + 1
          bsize_liste[lmarker] = bsize

          state_next = 1


        #-------------------------------------------------------------
        # state 2: identification of next valid_value after the blink
        #-------------------------------------------------------------

        if state_no == 2:
         # collecting values following the blink
         #- - - - - - - - - - - - - - - - - - - - - -
         if lmarker < puffer_size:
          lmarker = lmarker + 1
          bsize_liste[lmarker] = bsize

          state_next = 2

         else:
        # identification of next valid_value after the blink
        #- - - - - - - - - - - - - - - - - - - - - - - - - - - -
          if bsize > lower_th and abs(bsize-bsize_liste[lmarker]) <= step_limit and abs(bsize_liste[lmarker]-bsize_liste[lmarker-1]) <= step_limit:
           lmarker = lmarker + 1
           bsize_liste[lmarker] = bsize

           state_next = 1

          else:
           lmarker = lmarker + 1
           bsize_liste[lmarker] = bsize
           bsize_liste[lmarker-2] = valid_value

           state_next = 2

        state_no = state_next

        #baseline_liste.append(sampleData.leftEye.diam/32)
        line1 = visual.Line(win, start=(0, -20), end=(0, 20), lineColor=(-1, -1, -1))
        line2 = visual.Line(win, start=(-20, 0), end=(20, 0), lineColor=(-1, -1, -1))
        line1.draw()
        line2.draw()
  Routine trial_erg
    CodeComponent code_7
      Begin Routine:
        timer3=core.CountdownTimer()
        timer3.add(5)
      Each Frame:
        vartext6 = '= ?'
        if timer3.getTime()<0 :
            vartext6 = akt_zahl
    TextComponent text_7
      color = $[-0.5, -0.5, -0.5]
      text [set every frame] = $vartext6
      stopVal [duration (s)] = 10
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine tr_instructions
    TextComponent text_2
      color = $[-0.5, -0.5, -0.5]
      stopVal [duration (s)] = 3.0
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Baselineregistrierung beendet.

        Messung startet in wenigen Sekunden.
  Routine arousal
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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      customize_everything:
        showAccept=False,escapeKeys=['escape'], size=1.62,
            pos=[0.0, -0.1], low=1, high=9, scale=' ', markerColor= [-0.5, -0.5, -0.5], textColor=[-0.5, -0.5, -0.5], lineColor=[-0.5, -0.5, -0.5]
    ImageComponent image_3
      pos = [0, 150]
      startVal [time (s)] = 0.0
      image = arousal.png
      size = [910, 115]
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  Routine training_feedback
    TextComponent text_13
      color = $[-0.5, -0.5, -0.5]
      stopVal [duration (s)] = 10
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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    CodeComponent b_trial_code_2_
      Begin Experiment:
        from numpy import (log)
        maxsize=0
        minsize=3000
        psizeliste = [0]*19000 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz
        psize = 0

        feedbacktext = ""
      Begin Routine:
        psizeliste = [0]*190000 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz
        psize = 0


        #---------------------
        # starting values
        state_no = 0

        lmarker = -1

        delay_size = 2

        #---------------------
        # filter preferences
        step_limit = 0.19    # 30Hz: 0.19 | 60Hz: 0.09
        lower_th = 1

        #---------------------
        # plot settings
        minsize = 3000
        maxsize = 0
        plot_marker = 0
        mean_length = 3
        plot_buffer = 5

        abc = 0

        #draw
        line1 = visual.Line(win, start=(0, -20), end=(0, 20), lineColor=(-1, -1, -1))
        line2 = visual.Line(win, start=(-20, 0), end=(20, 0), lineColor=(-1, -1, -1))
        circle2 = visual.Circle(win, edges=96, radius=aussenringradius,lineWidth=1, lineColor=(0 , 0, 0), fillColor=(0 , 0, 0), interpolate=True)
        circle3 = visual.Circle(win, edges=96, radius=innenringradius,lineWidth=1, lineColor=(-0.3 , -0.3, -0.3), fillColor=(-0.3 , -0.3, -0.3), interpolate=True)
        circle4 = visual.Circle(win, edges=96, radius=baselinemean*35,lineWidth=2, lineColor=(-1 , -1, -1), interpolate=True)
        circle5 = visual.Circle(win, edges=96, radius=1000,lineWidth=1, lineColor=(-1 , -1, -1), interpolate=True)
        circle6 = visual.Circle(win, edges=96, radius=1000,lineWidth=1, lineColor=(-1 , -1, -1), interpolate=True)
      End Routine:
        psizeliste = filter(None, psizeliste)

        psizemean = round((sum(psizeliste)/(len(psizeliste))),2)

        thisExp.addData('Pupil_Liste', psizeliste)
        thisExp.addData('Pupil_Mean', psizemean)


        feedbacktext = "Your baseline was: " + str(baselinemean)+ "\n" + "Your average pupildilation was: " + str(psizemean)+ "\n"
      End Experiment:
        res = iViewXAPI.iV_Disconnect()
      Each Frame:
        #-----------------------------------
        # Each Frame
        #-----------------------------------
        # eye-tracker data
        res = iViewXAPI.iV_GetSample(byref(sampleData))
        psize =(sampleData.leftEye.diam) # /32 für highspeed eyetracker, ohne /32 für RED


        #--------------------
        # state 0: starting
        #--------------------
        if state_no == 0:
         if lmarker < 1:
          lmarker = lmarker + 1
          psizeliste[lmarker] = psize
          state_next = 0

         else:
          if psize > lower_th and psizeliste[lmarker] > lower_th and psizeliste[lmarker-1] > lower_th and (abs(psize-psizeliste[lmarker]) <= step_limit) and (abs(psizeliste[lmarker]-psizeliste[lmarker-1]) <= step_limit):
           lmarker = lmarker + 1
           psizeliste[lmarker] = psize
           state_next = 1
          else:
           psizeliste[lmarker-1] = psizeliste[lmarker]
           psizeliste[lmarker] = psize
           state_next = 0


        #----------------------
        # state 1: observation
        #----------------------

        if state_no == 1:
         plot_marker = 1
         # Filter Activation
         #- - - - - - - - - - -
         if psize <= lower_th:
          on = 1
          jump_marker = lmarker + 1 # marks values to be replaced
          # Identification of last valid_value before the blink
          #- - - - - - - - - - - - - - - - - - - - - - - - - - - - -
          while on == 1:
           if psizeliste[lmarker] >= lower_th and psizeliste[lmarker-1] >= lower_th and psizeliste[lmarker-2] >= lower_th and abs(psizeliste[lmarker]-psizeliste[lmarker-1]) <= step_limit and abs(psizeliste[lmarker-1]-psizeliste[lmarker-2]) <= step_limit:
            valid_value = psizeliste[lmarker]
            lmarker = lmarker + 1
            # replacing values
            for i in range(lmarker, jump_marker, 1):
             psizeliste[i] = valid_value
            psizeliste[jump_marker] = valid_value
            lmarker = jump_marker
            puffer_size = jump_marker + delay_size
            on = 0
            state_next = 2
           else:
            lmarker = lmarker-1
         else:
          lmarker = lmarker + 1
          psizeliste[lmarker] = psize
          state_next = 1
        #-------------------------------------------------------------
        # state 2: identification of next valid_value after the blink
        #-------------------------------------------------------------
        if state_no == 2:
         plot_marker = 1
         # collecting values following the blink
         #- - - - - - - - - - - - - - - - - - - - - -
         if lmarker < puffer_size:
          lmarker = lmarker + 1
          psizeliste[lmarker] = psize
          state_next = 2

         else:
         # identification of next valid_value after the blink
         #- - - - - - - - - - - - - - - - - - - - - - - - - - - -
          if psize > lower_th and abs(psize-psizeliste[lmarker]) <= step_limit and abs(psizeliste[lmarker]-psizeliste[lmarker-1]) <= step_limit:
           lmarker = lmarker + 1
           psizeliste[lmarker] = psize
           state_next = 1
          else:
           lmarker = lmarker + 1
           psizeliste[lmarker] = psize
           psizeliste[lmarker-2] = valid_value
           state_next = 2

        #- - - - - - - - - - - - - - - - - - - - - - - - - - -
        # smooth & plot data:
        #- - - - - - - - - - - - - - - - - - - - - - - - - - -
        if state_no == 0 or state_no == 1 or state_no == 2:
         if plot_marker == 1:
                # BASELINE RINGE (schwarz): MW +/-SD
                #- - - - - - - - - - - - - - - - - - - -
                #- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -
                # FEEDBACK RINGE (rot | grau): Pupillengröße u. Extrema
                #- - - - - - - - - - - - - - - - - - - - - - - - - - - - -
          if lmarker >= mean_length + plot_buffer:
           current_mean = 0
           for p in range(1, mean_length+1, 1):
            current_mean = psizeliste[lmarker-p-plot_buffer] + current_mean
           current_mean = (current_mean/mean_length)*35

          if current_mean > maxsize and current_mean > aussenringradius:
           maxsize = current_mean
           circle5 = visual.Circle(win, edges=96, radius=maxsize,lineWidth=1, lineColor=(0.2 , 0.2, 0.2), interpolate=True)
          elif current_mean < minsize and current_mean < innenringradius and current_mean != 0:
           minsize = current_mean
           circle6 = visual.Circle(win, edges=96, radius=minsize,lineWidth=1, lineColor=(0.2 , 0.2, 0.2), interpolate=True)

        #red circle
        circle1 = visual.Circle(win, edges=96, radius=current_mean,lineWidth=4, lineColor=(0,-1,-1), interpolate=True)

        abc = abc+0.03

        circle2.draw()
        circle3.draw()
        #circle4.draw()
        circle1.draw()
        line1.draw()
        line2.draw()
        #- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -

        state_no = state_next
    KeyboardComponent key_resp_11
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine meldung
    TextComponent text_10
      color = $[-0.5, -0.5, -0.5]
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Danke.

        Fixiere weiterhin das Kreuz und imaginiere eine schöne Situation.
  Routine pause
    TextComponent Puffer
      color = $[-0.5, -0.5, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Messung beendet.

        Weiter mit Leertaste.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_11
      End Routine:
        feedbacktext=""
  Routine end
    TextComponent text_end
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        The training has finished!

        (press 'space')
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startEstim = 0.0
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bl_instructions
    TextComponent baseline_instructions
      color = $[-0.5, -0.5, -0.5]
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        After the baseline was taken you will have 5 Minutes
        to explore different strategies to increase or decrease your pupil size.

        (to start press <space>)
    CodeComponent code_10
      Begin Experiment:
        import random
        nend=0
        clbsloop=0
        current_mean = 0
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine SAM
    TextComponent text_8
      color = $[-0.5, -0.5, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Bitte bewerte im Folgenden dein aktuelles Empfinden.

        Zum Starten Leertaste drücken.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_noFeedback
    CodeComponent b_iViewX_2_
      End Experiment:
        res = iViewXAPI.iV_Disconnect()
    TextComponent text_14
      color = $[-0.5, -0.5, -0.5]
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Start activating when the color of the cross changes to light gray

        (press 'space')
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startEstim = 0
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training_noFeedback
    TextComponent text_11
      color = $[-0.5, -0.5, -0.5]
      stopVal [duration (s)] = 10
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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    CodeComponent b_b_trial_code_2__2_
      Begin Experiment:
        from numpy import (log)
        maxsize=0
        minsize=3000
        psizeliste = [0]*19000 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz
        psize = 0
      Begin Routine:
        psizeliste = [0]*190000 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz
        psize = 0


        #---------------------
        # starting values
        state_no = 0

        lmarker = -1

        delay_size = 2

        #---------------------
        # filter preferences
        step_limit = 0.19    # 30Hz: 0.19 | 60Hz: 0.09
        lower_th = 1

        #---------------------
        # plot settings
        minsize = 3000
        maxsize = 0
        plot_marker = 0
        mean_length = 3
        plot_buffer = 5

        abc = 0

        #draw
        line1 = visual.Line(win, start=(0, -20), end=(0, 20), lineColor=(-1, -1, -1))
        line2 = visual.Line(win, start=(-20, 0), end=(20, 0), lineColor=(-1, -1, -1))
        circle2 = visual.Circle(win, edges=96, radius=aussenringradius,lineWidth=1, lineColor=(0 , 0, 0), fillColor=(0 , 0, 0), interpolate=True)
        circle3 = visual.Circle(win, edges=96, radius=innenringradius,lineWidth=1, lineColor=(-0.3 , -0.3, -0.3), fillColor=(-0.3 , -0.3, -0.3), interpolate=True)
        circle4 = visual.Circle(win, edges=96, radius=baselinemean*35,lineWidth=2, lineColor=(-1 , -1, -1), interpolate=True)
        circle5 = visual.Circle(win, edges=96, radius=1000,lineWidth=1, lineColor=(-1 , -1, -1), interpolate=True)
        circle6 = visual.Circle(win, edges=96, radius=1000,lineWidth=1, lineColor=(-1 , -1, -1), interpolate=True)
      End Routine:
        psizeliste = filter(None, psizeliste)

        psizemean = round((sum(psizeliste)/(len(psizeliste))),2)

        thisExp.addData('Pupil_Liste', psizeliste)
        thisExp.addData('Pupil_Mean', psizemean)


        feedbacktext = "Your baseline was: " + str(baselinemean)+ "\n" + "Your average pupildilation was: " + str(psizemean)+ "\n"
      End Experiment:
        res = iViewXAPI.iV_Disconnect()
      Each Frame:
        #-----------------------------------
        # Each Frame
        #-----------------------------------
        # eye-tracker data
        res = iViewXAPI.iV_GetSample(byref(sampleData))
        psize =(sampleData.leftEye.diam) # /32 für highspeed eyetracker, ohne /32 für RED


        #--------------------
        # state 0: starting
        #--------------------
        if state_no == 0:
         if lmarker < 1:
          lmarker = lmarker + 1
          psizeliste[lmarker] = psize
          state_next = 0

         else:
          if psize > lower_th and psizeliste[lmarker] > lower_th and psizeliste[lmarker-1] > lower_th and (abs(psize-psizeliste[lmarker]) <= step_limit) and (abs(psizeliste[lmarker]-psizeliste[lmarker-1]) <= step_limit):
           lmarker = lmarker + 1
           psizeliste[lmarker] = psize
           state_next = 1
          else:
           psizeliste[lmarker-1] = psizeliste[lmarker]
           psizeliste[lmarker] = psize
           state_next = 0


        #----------------------
        # state 1: observation
        #----------------------

        if state_no == 1:
         plot_marker = 1
         # Filter Activation
         #- - - - - - - - - - -
         if psize <= lower_th:
          on = 1
          jump_marker = lmarker + 1 # marks values to be replaced
          # Identification of last valid_value before the blink
          #- - - - - - - - - - - - - - - - - - - - - - - - - - - - -
          while on == 1:
           if psizeliste[lmarker] >= lower_th and psizeliste[lmarker-1] >= lower_th and psizeliste[lmarker-2] >= lower_th and abs(psizeliste[lmarker]-psizeliste[lmarker-1]) <= step_limit and abs(psizeliste[lmarker-1]-psizeliste[lmarker-2]) <= step_limit:
            valid_value = psizeliste[lmarker]
            lmarker = lmarker + 1
            # replacing values
            for i in range(lmarker, jump_marker, 1):
             psizeliste[i] = valid_value
            psizeliste[jump_marker] = valid_value
            lmarker = jump_marker
            puffer_size = jump_marker + delay_size
            on = 0
            state_next = 2
           else:
            lmarker = lmarker-1
         else:
          lmarker = lmarker + 1
          psizeliste[lmarker] = psize
          state_next = 1
        #-------------------------------------------------------------
        # state 2: identification of next valid_value after the blink
        #-------------------------------------------------------------
        if state_no == 2:
         plot_marker = 1
         # collecting values following the blink
         #- - - - - - - - - - - - - - - - - - - - - -
         if lmarker < puffer_size:
          lmarker = lmarker + 1
          psizeliste[lmarker] = psize
          state_next = 2

         else:
         # identification of next valid_value after the blink
         #- - - - - - - - - - - - - - - - - - - - - - - - - - - -
          if psize > lower_th and abs(psize-psizeliste[lmarker]) <= step_limit and abs(psizeliste[lmarker]-psizeliste[lmarker-1]) <= step_limit:
           lmarker = lmarker + 1
           psizeliste[lmarker] = psize
           state_next = 1
          else:
           lmarker = lmarker + 1
           psizeliste[lmarker] = psize
           psizeliste[lmarker-2] = valid_value
           state_next = 2

        #- - - - - - - - - - - - - - - - - - - - - - - - - - -
        # smooth & plot data:
        #- - - - - - - - - - - - - - - - - - - - - - - - - - -
        if state_no == 0 or state_no == 1 or state_no == 2:
         if plot_marker == 1:
                # BASELINE RINGE (schwarz): MW +/-SD
                #- - - - - - - - - - - - - - - - - - - -
                #- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -
                # FEEDBACK RINGE (rot | grau): Pupillengröße u. Extrema
                #- - - - - - - - - - - - - - - - - - - - - - - - - - - - -
          if lmarker >= mean_length + plot_buffer:
           current_mean = 0
           for p in range(1, mean_length+1, 1):
            current_mean = psizeliste[lmarker-p-plot_buffer] + current_mean
           current_mean = (current_mean/mean_length)*35

          if current_mean > maxsize and current_mean > aussenringradius:
           maxsize = current_mean
           circle5 = visual.Circle(win, edges=96, radius=maxsize,lineWidth=1, lineColor=(0.2 , 0.2, 0.2), interpolate=True)
          elif current_mean < minsize and current_mean < innenringradius and current_mean != 0:
           minsize = current_mean
           circle6 = visual.Circle(win, edges=96, radius=minsize,lineWidth=1, lineColor=(0.2 , 0.2, 0.2), interpolate=True)

        #red circle
        #circle1 = visual.Circle(win, edges=96, radius=current_mean,lineWidth=4, lineColor=(0,-1,-1), interpolate=True)

        #abc = abc+0.03

        #circle2.draw()
        #circle3.draw()
        #circle4.draw()
        #circle1.draw()
        #line1.draw()
        #line2.draw()

        line1 = visual.Line(win, start=(0, -20), end=(0, 20), lineColor=(-0, -0, -0))
        line2 = visual.Line(win, start=(-20, 0), end=(20, 0), lineColor=(-0, -0, -0))
        line1.draw()
        line2.draw()
        #- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -

        state_no = state_next
  Routine test
  Routine wait
    CodeComponent code_12
      Each Frame:
        #baseline_liste.append(sampleData.leftEye.diam/32)
        line1 = visual.Line(win, start=(0, -20), end=(0, 20), lineColor=(-1, -1, -1))
        line2 = visual.Line(win, start=(-20, 0), end=(20, 0), lineColor=(-1, -1, -1))
        line1.draw()
        line2.draw()
    KeyboardComponent key_resp_10
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine save_trial
    CodeComponent code_2
      End Routine:
        thisExp.addData('Pupil_Liste', ssizeliste)
  Routine baselineCL
    TextComponent zeitpuffer
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_9
      Begin Routine:
        counter=counter+1
        bsize_liste = [0]*1900 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz

        #-----------------------------------
        # Begin Routine
        #-----------------------------------

        #---------------------
        # starting values
        state_no = 0

        lmarker = -1

        delay_size = 2

        #---------------------
        # filter preferences
        step_limit = 0.09    # 30Hz: 0.19 | 60Hz: 0.09
        lower_th = 3
      End Routine:
        #-----------------------------------
        # End Routine
        #-----------------------------------

        # computing baseline mean
        bsize_liste = filter(None, bsize_liste)
        baselinemean = round((sum(bsize_liste)/(len(bsize_liste))),2)
        baselinemean = baselinemean

        # computing baseline sd
        baselinesd = abs(round(numpy.std(bsize_liste),8))

        # computing percent-change: sd / mean
        prozent_change1= round((baselinesd/baselinemean),2)

        # computing aussenringradius - maximum deviation
        aussenringradius = (baselinemean+(baselinemean*prozent_change1))*35

        # computing innenringradius - minimum deviation
        innenringradius = (baselinemean-(baselinemean*prozent_change1))*35

        #--------------------------------------------------------------------------
        # savings:

        thisExp.addData('Baseline_Liste', bsize_liste)
        thisExp.addData('Baseline_Mittelwert', baselinemean)
        thisExp.addData('Baseline_Standardabweichung', baselinesd)
      Each Frame:
        res = iViewXAPI.iV_GetSample(byref(sampleData))
        bsize =(sampleData.leftEye.diam/32)

        #--------------------
        # state 0: starting
        #--------------------
        if state_no == 0:
         if lmarker < 1:
          lmarker = lmarker + 1
          bsize_liste[lmarker] = bsize
          state_next = 0

         else:
          if bsize > lower_th and bsize_liste[lmarker] > lower_th and bsize_liste[lmarker-1] > lower_th and (abs(bsize-bsize_liste[lmarker]) <= step_limit) and (abs(bsize_liste[lmarker]-bsize_liste[lmarker-1]) <= step_limit):
           lmarker = lmarker + 1
           bsize_liste[lmarker] = bsize
           state_next = 1
          else:
           bsize_liste[lmarker-1] = bsize_liste[lmarker]
           bsize_liste[lmarker] = bsize

           state_next = 0


        #----------------------
        # state 1: observation
        #----------------------

        if state_no == 1:

         # Filter Activation
         #- - - - - - - - - - -
         if bsize <= lower_th:
          on = 1
          jump_marker = lmarker + 1 # marks values to be replaced

                # Identification of last valid_value before the blink
                #- - - - - - - - - - - - - - - - - - - - - - - - - - - - -
          while on == 1:
           if bsize_liste[lmarker] >= lower_th and bsize_liste[lmarker-1] >= lower_th and bsize_liste[lmarker-2] >= lower_th and abs(bsize_liste[lmarker]-bsize_liste[lmarker-1]) <= step_limit and abs(bsize_liste[lmarker-1]-bsize_liste[lmarker-2]) <= step_limit:
            valid_value = bsize_liste[lmarker]
            lmarker = lmarker + 1
            for i in range(lmarker, jump_marker, 1):
             bsize_liste[i] = valid_value

            bsize_liste[jump_marker] = valid_value

            lmarker = jump_marker
            puffer_size = jump_marker + delay_size

            on = 0
            state_next = 2

           else:
            lmarker = lmarker-1

         else:
          lmarker = lmarker + 1
          bsize_liste[lmarker] = bsize

          state_next = 1

        #-------------------------------------------------------------
        # state 2: identification of next valid_value after the blink
        #-------------------------------------------------------------

        if state_no == 2:
         # collecting values following the blink
         #- - - - - - - - - - - - - - - - - - - - - -
         if lmarker < puffer_size:
          lmarker = lmarker + 1
          bsize_liste[lmarker] = bsize

          state_next = 2

         else:
        # identification of next valid_value after the blink
        #- - - - - - - - - - - - - - - - - - - - - - - - - - - -
          if bsize > lower_th and abs(bsize-bsize_liste[lmarker]) <= step_limit and abs(bsize_liste[lmarker]-bsize_liste[lmarker-1]) <= step_limit:
           lmarker = lmarker + 1
           bsize_liste[lmarker] = bsize

           state_next = 1

          else:
           lmarker = lmarker + 1
           bsize_liste[lmarker] = bsize
           bsize_liste[lmarker-2] = valid_value

           state_next = 2

        state_no = state_next

        #baseline_liste.append(sampleData.leftEye.diam/32)
        line1 = visual.Line(win, start=(0, -20), end=(0, 20), lineColor=(-1, -1, -1))
        line2 = visual.Line(win, start=(-20, 0), end=(20, 0), lineColor=(-1, -1, -1))
        line1.draw()
        line2.draw()
  Routine end_instructions
    CodeComponent code_5
      Begin Experiment:
        vartext2=''
      Begin Routine:
        if counter ==9:
            vartext2=u'Vielen Dank f\xfcr die Teilnahme! Das Programm beendet sich in 20 Sekunden von selbst.'
    TextComponent text_5
      color = $[-0.5, -0.5, -0.5]
      text [set every frame] = $vartext2
      stopVal [duration (s)] = 20
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine ergebnis
    TextComponent text_3
      color = black
      text [set every frame] = $vartext3
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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    CodeComponent code_6
      Begin Experiment:
        vartext3 = ''
        vartext4 = ''
      Begin Routine:
        else:
            vartext3 = 'press space'
            vartext4 = ''
    TextComponent text_4
      color = black
      text [set every frame] = $vartext4
      pos = [0, -50]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    CodeComponent iViewX
      End Experiment:
        res = iViewXAPI.iV_Disconnect()
    TextComponent text
      color = $[-0.5, -0.5, -0.5]
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Start activating when the visual feedback appears!

        (press 'space')
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startEstim = 0
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trophy
    ImageComponent image_4
      stopVal [duration (s)] = 3
      durationEstim = 3
      units = pix
      startVal [time (s)] = 0.0
      image = images/trophy.png
      size = [256, 256]
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    CodeComponent code_8
      Begin Experiment:
        varwin=0
      Begin Routine:
        varwin=0
        if counter==7 or counter==8 or counter==9:
            varwin=round((minsize/35),2)
        elif counter==3 or counter==4 or counter==5 or counter==6 and maxsize > 0:
            varwin=round((maxsize/35),2)
    TextComponent text_9
      color = $[-0.5, -0.5, -0.5]
      text [set every frame] = $varwin
      stopVal [duration (s)] = 3
      pos = [0, -200]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine save_baseline
    CodeComponent code
  Routine trial
    TextComponent text_6
      color = $[-0.5, -0.5, -0.5]
      stopVal [duration (s)] = 300
      startEstim = 0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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    CodeComponent trial_code
      Begin Experiment:
        from numpy import (log)
        maxsize=0
        minsize=3000
        psizeliste = [0]*19000 # ca. 900 bei 30Hz | ca. 1900 bei 60Hz
        psize = 0

        feedbacktext = ""
      Begin Routine:
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      End Routine:
        psizeliste = filter(None, psizeliste)

        psizemean = round((sum(psizeliste)/(len(psizeliste))),2)

        thisExp.addData('Pupil_Liste', psizeliste)
        thisExp.addData('Pupil_Mean', psizemean)
        thisExp.addData('feedback', 'visual')


        feedbacktext = "Your baseline was: " + str(baselinemean)+ "\n" + "Your average pupildilation was: " + str(psizemean)+ "\n"
      End Experiment:
        res = iViewXAPI.iV_Disconnect()
      Each Frame:
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    KeyboardComponent key_resp_9
      stopVal [duration (s)] = 300
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine iViewX_Connect
    CodeComponent code_4
      Begin Experiment:
        from iViewXAPI import  *            #iViewX library
        # ---------------------------------------------
        #---- connect to iViewX
        # ---------------------------------------------
        res = iViewXAPI.iV_Connect(c_char_p('141.54.159.23'), c_int(4444), c_char_p('141.54.159.21'), c_int(5555))

        res = iViewXAPI.iV_GetSystemInfo(byref(systemData))
        print "iV_GetSystemInfo: " + str(res)
        print "Samplerate: " + str(systemData.samplerate)
        print "iViewX Verion: " + str(systemData.iV_MajorVersion) + "." + str(systemData.iV_MinorVersion) + "." + str(systemData.iV_Buildnumber)
        print "iViewX API Verion: " + str(systemData.API_MajorVersion) + "." + str(systemData.API_MinorVersion) + "." + str(systemData.API_Buildnumber)


        '''
        # ---------------------------------------------
        #---- configure and start calibration
        # ---------------------------------------------
        #calibrationData = CCalibration(13, 1, 1, 0, 0, 180, 150, 2, 20, b"")

        calibrationData = CCalibration(9, 1, 1, 0, 2, 250, 180, 2, 20, b"")
        #(method, visualization, display, speed, auto, fg, bg, shape, size, filename)

        res = iViewXAPI.iV_SetupCalibration(byref(calibrationData))
        print "iV_SetupCalibration " + str(res)
        res = iViewXAPI.iV_Calibrate()
        print "iV_Calibrate " + str(res)
        res = iViewXAPI.iV_Validate()
        print "iV_Validate " + str(res)

        print "iV_GetAccuracy " + str(res)
        print "deviationXLeft " + str(accuracyData.deviationLX) + " deviationYLeft " + str(accuracyData.deviationLY)
        print "deviationXRight " + str(accuracyData.deviationRX) + " deviationYRight " + str(accuracyData.deviationRY)
        '''
  Routine valence
    CodeComponent code_3
    RatingScaleComponent rating1
      pos = 0, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      startEstim = 0
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      customize_everything:
        showAccept=False,escapeKeys=['escape'], size=1.62,
            pos=[0.0, -0.1], low=1, high=9, scale=' ', markerColor= [-0.5, -0.5, -0.5], textColor=[-0.5, -0.5, -0.5], lineColor=[-0.5, -0.5, -0.5]
    ImageComponent image_2
      pos = [0, 150]
      startVal [time (s)] = 0.0
      image = valence.png
      size = [910, 115]
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Flow
  Routine iViewX_Connect
  Routine bl_instructions
  Routine baseline
  Routine trial
  Routine feedback
  Routine instructions
  LoopInitiator feedbackLoop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine wait
    Routine baseline
    Routine training_feedback
    Routine feedback
  LoopTerminator feedbackLoop
  Routine instructions_noFeedback
  LoopInitiator noFeedbackLoop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine wait
    Routine baseline
    Routine training_noFeedback
    Routine feedback
  LoopTerminator noFeedbackLoop
  Routine end
